---
API: 3
OpenSesame: 4.1.9
Platform: nt
---
set width 1024
set title iFST_online
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "8e578628-2c79-fd38-6320-4e3f9474c5c0"
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path_local "C:\\Users\\morenoverdu\\OneDrive - UCL\\BAS-Lab\\Github repositories\\iFST\\iFST_local_OpenSesame"
set experiment_path "C:\\Users\\morenoverdu\\OneDrive - UCL\\BAS-Lab\\Github repositories\\iFST\\iFST_online_OpenSesame"
set disable_garbage_collection False
set description "iFST - Imagined Finger Sequence Task"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background white

define form_text_input age_form_text_input
	set timeout infinite
	set spacing 10
	set rows "2;2"
	set question "{age_question_msg}"
	set only_render no
	set margins "50;50;50;50"
	set form_var age_response
	set form_title "{age_msg}"
	set form_question "{age_question_msg}"
	set description "Age text input"
	set default_response ""
	set cols "2;2"
	set button_text Ok
	set _theme gray


define sequence block_seq
	set flush_keyboard yes
	set description "One block"
	run block_start_script True
	run block_start_kb True
	run seq_loop True
	run self_assess_loop "[self_assess_show] = 1"

define keyboard_response block_start_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define inline_javascript block_start_script
	set description "Block start screen and settings"
	___run__
	// block_start_script — Run: show block screen
	var bn = parseInt(vars.block_number);
	var pb = parseInt(vars.practice_blocks);
	var tt = parseInt(vars.total_blocks);
	var blockMessage;
	if (bn === 1) {
	    blockMessage = vars.block_first_msg;
	} else if (bn === pb + 1) {
	    blockMessage = vars.block_intro_task_msg;
	} else {
	    blockMessage = vars.block_msg_standard;
	}
	var blkLabel = vars.block_msg + " " + bn + " " + vars.out_of_msg + " " + tt;
	var c = Canvas({background_color: white});
	draw_paragraphs(c, blkLabel, 0, -280, SCREEN_W - 200,
	                {color: black, font_size: 24, bold: true});
	draw_paragraphs(c, blockMessage, 0, -200, SCREEN_W - 200,
	                {color: black, font_size: 18});
	c.text({text: vars.adv_msg, x: 0, y: 330, color: black, font_size: 20});
	c.show();
	__end__
	___prepare__
	// block_start_script — Prepare: increment block, build trial_list
	vars.block_number     = parseInt(vars.block_number) + 1;
	var bn = parseInt(vars.block_number);
	var pb = parseInt(vars.practice_blocks);
	vars.end_block        = "no";
	vars.task_trial_count = 0;
	if (bn === 1) {
	    vars.block_type       = "practice";
	    vars.feedback         = 1;
	    vars.self_assess_show = 0;
	    stim_counters = {1:0, 2:0, 3:0, 4:0};
	} else {
	    vars.block_type       = "task";
	    vars.feedback         = 0;
	    vars.self_assess_show = 1;
	    if (bn === pb + 1) {
	        vars.sequence = (parseInt(vars.group) === 0) ? "simple" : "complex";
	    } else {
	        vars.sequence = (parseInt(vars.group) === 0) ? "complex" : "simple";
	    }
	}
	var cond_rows = readPoolCsv(vars.conditions_file);
	trial_list  = [];
	for (var rep = 0; rep < 30; rep++) {
	    for (var ci = 0; ci < cond_rows.length; ci++) {
	        trial_list.push(cond_rows[ci]);
	    }
	}
	trial_idx   = 0;
	trial_count = trial_list.length;
	__end__

define loop blocks_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Practice + 2 task blocks"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 block_iter 1
	setcycle 1 block_iter 2
	setcycle 2 block_iter 3
	run block_seq

define keyboard_response box_flash_wait
	set timeout 100
	set flush no
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define inline_javascript box_reset_script
	set description "Executes JavaScript"
	___run__
	var sc2  = vars.sc;
	var pic2 = vars.sequence_picture;
	var col2 = (vars.trial_type === "imagery") ? "purple" : "blue";
	var bxs2 = [-115,-38,38,115].map(function(x){return Math.round(x*sc2);});
	var by2  = Math.round(290 * sc2);
	var bs2  = Math.round(54  * sc2);
	canvasSeq = Canvas({background_color: white});
	draw_paragraphs(canvasSeq, msg[vars.trial_prompt_key]||"",
	                0, Math.round(-310*sc2), SCREEN_W-200,
	                {color:col2, font_size:22});
	canvasSeq.image({fname:pic2, x:0, y:0,
	                 scale:scale_for(pic2, Math.round(270*sc2), Math.round(270*sc2))});
	for (var i=0; i<4; i++) {
	    canvasSeq.rect({name:"box_"+i,
	                    x:bxs2[i]-Math.floor(bs2/2), y:by2-Math.floor(bs2/2),
	                    w:bs2, h:bs2, color:black, fill:false, penwidth:3});
	}
	canvasSeq.show();
	__end__
	set _prepare ""

define inline_javascript bye_script
	set description "Goodbye screen"
	___run__
	// bye_script — Run: goodbye screen (shown for 3 s via bye_wait)
	var c = Canvas({background_color: white});
	draw_paragraphs(c, vars.bye_msg || msg["bye_msg"] || "",
	                0, -60, SCREEN_W - 200, {color:black, font_size:26});
	c.show();
	__end__
	___prepare__
	// No prepare needed.
	__end__

define keyboard_response bye_wait
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sampler correct_sound
	set volume 1
	set stop_after 0
	set sample "correct_sound.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sequence demographics_seq
	set flush_keyboard yes
	set description "Demographic questions (age + gender)"
	run age_form_text_input True
	run gender_form True

define inline_javascript exp_settings_script
	set description "Initialise variables and load messages"
	___run__
	// Initialisation is handled in the prepare phase.
	__end__
	___prepare__
	// ---------------------------------------------------------------
	// exp_settings_script — Prepare phase (JavaScript / OSWeb)
	// Runs once at experiment start, before any screen.
	// Language-dependent content is NOT loaded here — use setup_js_script.
	// ---------------------------------------------------------------
	// --- Colour aliases (OSWeb does not pre-define these) ---
	white = 'white';
	black = 'black';
	
	// --- Global experiment parameters ---
	vars.n_reps           = 10;
	vars.practice_blocks  = 1;
	vars.task_blocks      = 2;
	vars.total_blocks     = 3;
	vars.target_per_stim  = 2;
	vars.block_number     = 0;
	vars.lang_code        = "EN";
	vars.handedness       = "right";
	vars.conditions_file  = "conditions_right.csv";
	// Counterbalancing: even subject → group 0 (simple first); odd → group 1.
	vars.group = (parseInt(vars.subject_nr) % 2 === 0) ? 0 : 1;
	// Defaults overwritten by block_start_script at each block.
	vars.sequence         = "simple";
	vars.feedback         = 1;
	vars.self_assess_show = 1;
	vars.end_block        = "no";
	vars.run_trial        = "yes";
	vars.task_trial_count = 0;
	vars.block_type       = "practice";
	vars.sa_response      = -1;
	// Per-stimulus correct-trial counters (global — persist across items).
	stim_counters = {1: 0, 2: 0, 3: 0, 4: 0};
	// --- Utility helpers ---
	function nl2br(s) { return String(s).replace(/\n/g, "<br>"); }
	function basename(p) {
	    var parts = String(p).split("/");
	    return parts[parts.length - 1];
	}
	iFST_IMG_PX = {
	    "simple_execution_right.png":  [670, 670],
	    "simple_execution_left.png":   [670, 670],
	    "complex_execution_right.png": [671, 671],
	    "complex_execution_left.png":  [671, 671],
	    "simple_imagery_right.png":    [670, 670],
	    "simple_imagery_left.png":     [671, 671],
	    "complex_imagery_right.png":   [670, 670],
	    "complex_imagery_left.png":    [671, 671]
	};
	function scale_for(fname, target_w, target_h) {
	    var dims = iFST_IMG_PX[fname] || [1361, 1021];
	    return Math.min(target_w / dims[0], target_h / dims[1]);
	}
	// --- Screen scale factor ---
	sc = Math.min((width || 1024) / 1024.0, (height || 768) / 768.0);
	vars.sc = sc;
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Main experiment sequence"
	run exp_settings_script True
	run language_form True
	run setup_script True
	run demographics_seq True
	run welcome_sequence True
	run instructions_loop True
	run blocks_loop True
	run bye_script True
	run bye_wait True

define keyboard_response feedback_wait_correct
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response feedback_wait_incorrect
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define form_multiple_choice gender_form
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{f_msg}
	{m_msg}
	{tg_msg}
	{nb_msg}
	{o_msg}
	{pns_msg}
	__end__
	set margins "50;50;50;50"
	set form_var gender_response
	set form_title "{gender_msg}"
	set description "Gender selection"
	set cols 1
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice handedness_form
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{left_handed_msg}
	{right_handed_msg}
	__end__
	set margins "50;50;50;50"
	set form_var handedness
	set form_title "{handedness_msg}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect_sound.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define keyboard_response inst_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define inline_javascript inst_script
	set description "Show one instruction slide (filtered by handedness)"
	___run__
	// inst_script — Run: text above, image below
	var row = cur_instructions_row;
	var c   = Canvas({background_color: white});
	draw_paragraphs(c, row.inst_msg, 0, -250, SCREEN_W - 200,
	                {color: black, font_size: 18});
	if (row.inst_pic && row.inst_pic.trim() !== "") {
	    c.image({fname: basename(row.inst_pic), x: 0, y: 160, scale: 0.25});
	}
	c.text({text: vars.adv_msg, x: 0, y: 340, color: black, font_size: 20});
	c.show();
	__end__
	___prepare__
	// inst_script — Prepare: advance instructions index
	var cur_idx          = vars.instructions_idx;
	cur_instructions_row = instructions_rows[cur_idx];
	vars.instructions_idx = vars.instructions_idx + 1;
	__end__

define loop instructions_loop
	set source_file ""
	set source table
	set repeat 400
	set order sequential
	set description "Instruction slides"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[instructions_idx] >= [instructions_count]"
	setcycle 0 empty_column ""
	run instructions_seq

define sequence instructions_seq
	set flush_keyboard yes
	set description "One instruction slide"
	run inst_script True
	run inst_kb True

define keyboard_response key_press_kb
	set timeout infinite
	set flush no
	set event_type keypress
	set duration keypress
	set description "Collect one key press (f/g/h/j)"
	set allowed_responses "f;g;h;j"

define loop key_press_loop
	set source_file ""
	set source table
	set repeat 10
	set order sequential
	set description "Collect all key presses for one trial"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[key_count] >= [key_presses]"
	setcycle 0 dummy ""
	run key_press_seq

define sequence key_press_seq
	set flush_keyboard no
	set description "One iteration: collect key then update state"
	run key_press_kb True
	run key_update_script True
	run box_flash_wait "[feedback] = 1"
	run box_reset_script "[feedback] = 1"

define inline_javascript key_update_script
	set description "Record one key press; update box feedback"
	___run__
	// key_update_script — records the key collected by key_press_kb
	var key = vars.response_key_press_kb || "";
	if (key) {
	    keysPressed_arr.push(key);
	    rtsMs_arr.push(Date.now());
	    vars.key_count = parseInt(vars.key_count) + 1;
	    if (parseInt(vars.feedback)) {
	        var keyMap = {f:0, g:1, h:2, j:3};
	        var kidx   = keyMap[key];
	        var sc2    = vars.sc;
	        var pic2   = vars.sequence_picture;
	        var col2   = (vars.trial_type === "imagery") ? "purple" : "blue";
	        var bxs2   = [-115,-38,38,115].map(function(x){return Math.round(x*sc2);});
	        var by2    = Math.round(290 * sc2);
	        var bs2    = Math.round(54  * sc2);
	        canvasSeq  = Canvas({background_color: white});
	        draw_paragraphs(canvasSeq, msg[vars.trial_prompt_key]||"",
	                        0, Math.round(-310*sc2), SCREEN_W-200,
	                        {color:col2, font_size:22});
	        canvasSeq.image({fname:pic2, x:0, y:0,
	                         scale:scale_for(pic2, Math.round(270*sc2), Math.round(270*sc2))});
	        for (var i=0; i<4; i++) {
	            canvasSeq.rect({name:"box_"+i,
	                            x:bxs2[i]-Math.floor(bs2/2), y:by2-Math.floor(bs2/2),
	                            w:bs2, h:bs2,
	                            color:black, fill:(i===kidx), penwidth:3});
	        }
	    canvasSeq.show();
	}
	}
	__end__
	___prepare__
	// No prepare needed.
	__end__

define inline_javascript lang_select_script
	set description "Language selection screen"
	___run__
	// ---------------------------------------------------------------
	// lang_select_script — Run phase (JavaScript / OSWeb)
	// Shows four language buttons; updates all message strings on click.
	// ---------------------------------------------------------------
	let sc = vars.sc;
	let btnW = Math.round(160 * sc);
	let btnH = Math.round(60  * sc);
	let btns = [
	    {code: "EN", label: "English",  x: Math.round(-240 * sc)},
	    {code: "ES", label: "Español",  x: Math.round( -80 * sc)},
	    {code: "FR", label: "Français", x: Math.round(  80 * sc)},
	    {code: "DE", label: "Deutsch",  x: Math.round( 240 * sc)},
	];
	let yTitle = Math.round(-120 * sc);
	let yBtn   = Math.round( -30 * sc);
	let yLbl   = Math.round(  -5 * sc);
	let c = Canvas();
	c.text({name: "title", text: "Select language",
	        x: 0, y: yTitle, color: "black", font_size: Math.round(24 * sc)});
	for (let btn of btns) {
	    c.rect({name: "btn_" + btn.code,
	            x: btn.x - btnW / 2, y: yBtn, w: btnW, h: btnH,
	            color: "#5588cc", fill: true});
	    c.text({name: "lbl_" + btn.code, text: btn.label,
	            x: btn.x, y: yLbl, color: "black",
	            font_size: Math.round(20 * sc)});
	}
	c.show();
	// Wait for a valid click on one of the language buttons.
	let mouse = Mouse({visible: true});
	let chosen = false;
	while (!chosen) {
	    let resp = await mouse.getClick();
	    if (!resp || !resp.pos) continue;
	    let [mx, my] = resp.pos;
	    for (let btn of btns) {
	        if (mx >= btn.x - btnW / 2 && mx <= btn.x + btnW / 2
	                && my >= yBtn && my <= yBtn + btnH) {
	            vars.lang_code = btn.code;
	            	            vars.sc = vars.sc;  // keep sc in sync
	            chosen = true;
	            break;
	        }
	    }
	}
	mouse.show_cursor({visible: false});
	__end__
	___prepare__
	// No prepare-phase logic needed for OSWeb.
	__end__

define form_multiple_choice language_form
	set timeout infinite
	set spacing 10
	set question "Select language and click Ok."
	__options__
	English
	Spanish
	French
	German
	__end__
	set margins "50;50;50;50"
	set form_var language
	set form_title "Select language"
	set description "Language selection"
	set cols 1
	set button_text Ok
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define logger logger
	set description "Registra datos experimentales"
	set auto_log no
	log subject_nr
	log datetime
	log block_iter
	log block_type
	log trial_type
	log stim
	log sequence_code
	log sequence_type
	log key_presses
	log feedback
	log run_trial
	log seq_typed
	log seq_acc
	log seq_time
	log seq_resp_keys
	log seq_resp_rt
	log sa_response
	log lang_code
	log age_response
	log gender_response
	log handedness
	log group
	log seq_resp_rt
	log crit_counter
	log task_trial_count
	log self_assess_construct
	log sa_response

define keyboard_response pre_trial_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Space to start trial"
	set allowed_responses space

define inline_javascript pre_trial_script
	set description "Pre-trial prompt; sets run_trial"
	___run__
	// pre_trial_script — Run: show pre-prompt (kb wait done by pre_trial_kb item)
	if (vars.run_trial === "yes") {
	    var promptText = msg[vars.pre_prompt_key] || "";
	    var condColor  = (vars.trial_type === "imagery") ? "purple" : "blue";
	    var c = Canvas({background_color: white});
	    draw_paragraphs(c, promptText, 0, -60, SCREEN_W - 200,
	                    {color: condColor, font_size: 20});
	    c.text({text: vars.adv_msg, x: 0, y: 300, color: condColor, font_size: 22});
	    c.show();
	} else {
	    Canvas({background_color: white}).show();
	}
	// Advance trial pointer (always, even for skipped trials)
	trial_idx = trial_idx + 1;
	if (trial_idx >= trial_count) { vars.end_block = "yes"; }
	__end__
	___prepare__
	// pre_trial_script — Prepare: read trial row, expose as vars.*, decide run_trial
	var row = trial_list[trial_idx];
	vars.hand             = row.hand           || "";
	vars.stim             = parseInt(row.stim) || 0;
	vars.sequence_code    = row.sequence_code  || "";
	vars.sequence_type    = row.sequence_type  || "";
	vars.trial_type       = row.trial_type     || "";
	vars.key_presses      = parseInt(row.key_presses) || 0;
	vars.sequence_picture = basename(row.sequence_picture || "");
	vars.pre_prompt_key   = row.prompt_before  || "";
	vars.trial_prompt_key = row.prompt         || "";
	vars.sa_response           = "";
	vars.self_assess_construct = "";
	if (vars.block_type === "task") {
	    vars.run_trial = (vars.sequence_type === vars.sequence) ? "yes" : "no";
	} else {
	    var cnt = stim_counters[parseInt(vars.stim)] || 0;
	    vars.run_trial = (cnt >= parseInt(vars.target_per_stim)) ? "no" : "yes";
	}
	__end__

define inline_javascript sa_init_script
	set description "Init VAS canvas for self-assessment"
	___run__
	// sa_init_script — init VAS state and show empty scale
	// Reset carry-over vars
	vars.crit_counter     = "";
	vars.feedback         = "";
	vars.key_presses      = "";
	vars.seq_acc          = "";
	vars.seq_typed        = "";
	vars.seq_resp_keys    = "";
	vars.seq_resp_rt      = "";
	vars.seq_time         = "";
	vars.sequence_code    = "";
	vars.sequence_type    = "";
	vars.stim             = "";
	vars.task_trial_count = "";
	vars.trial_type       = "";
	vars.sa_response      = "";
	vars.sa_confirmed     = "no";
	sa_selected = null;
	
	var sc = vars.sc;
	var lc = vars.lang_code;
	sa_sc = sc;
	sa_scaleLeft  = Math.round(-380 * sc);
	sa_scaleRight = Math.round( 380 * sc);
	sa_scaleY     = Math.round(  60 * sc);
	sa_tickSpan   = sa_scaleRight - sa_scaleLeft;
	sa_question = (vars["self_assess_question_" + lc] || vars.self_assess_question_EN || "")
	              .replace(/\\n/g, "\n");
	sa_labelMin = (vars["label_min_"    + lc] || vars.label_min_EN    || "").replace(/\\n/g, "\n");
	sa_labelMid = (vars["label_middle_" + lc] || vars.label_middle_EN || "").replace(/\\n/g, "\n");
	sa_labelMax = (vars["label_max_"    + lc] || vars.label_max_EN    || "").replace(/\\n/g, "\n");
	
	sa_drawCanvas = function(sel) {
	    var cv = Canvas({background_color: white});
	    draw_paragraphs(cv, sa_question, 0, Math.round(-240*sc), SCREEN_W-200,
	                    {color:black, font_size:17});
	    cv.line({sx:sa_scaleLeft, sy:sa_scaleY, ex:sa_scaleRight, ey:sa_scaleY,
	             color:black, penwidth:3});
	    for (var i=0; i<=10; i++) {
	        var tx = sa_scaleLeft + Math.round(i * sa_tickSpan / 10);
	        cv.line({sx:tx, sy:sa_scaleY-Math.round(12*sc),
	                 ex:tx, ey:sa_scaleY+Math.round(12*sc), color:black, penwidth:2});
	    }
	    cv.text({text:"0",  x:sa_scaleLeft,  y:sa_scaleY+Math.round(28*sc),
	             color:black, font_size:Math.round(16*sc)});
	    cv.text({text:"5",  x:0,             y:sa_scaleY+Math.round(28*sc),
	             color:black, font_size:Math.round(16*sc)});
	    cv.text({text:"10", x:sa_scaleRight, y:sa_scaleY+Math.round(28*sc),
	             color:black, font_size:Math.round(16*sc)});
	    draw_paragraphs(cv, sa_labelMin, sa_scaleLeft, sa_scaleY+Math.round(60*sc),
	                    Math.round(250*sc), {color:black, font_size:14});
	    draw_paragraphs(cv, sa_labelMid, 0,            sa_scaleY+Math.round(60*sc),
	                    Math.round(250*sc), {color:black, font_size:14});
	    draw_paragraphs(cv, sa_labelMax, sa_scaleRight, sa_scaleY+Math.round(60*sc),
	                    Math.round(250*sc), {color:black, font_size:14});
	    if (sel !== null) {
	        var sx = sa_scaleLeft + Math.round(sel * sa_tickSpan / 10);
	        cv.circle({x:sx, y:sa_scaleY, r:Math.round(12*sc), color:"#0055cc", fill:true});
	        cv.rect({x:Math.round(-75*sc), y:Math.round(200*sc),
	                 w:Math.round(150*sc), h:Math.round(50*sc), color:"#888888", fill:true});
	        draw_paragraphs(cv, vars.next_msg||"Next", 0, Math.round(218*sc),
	                        Math.round(150*sc), {color:white, font_size:20});
	    }
	    cv.show();
	};
	sa_drawCanvas(null);
	__end__
	___prepare__
	// No prepare needed.
	__end__

define loop sa_input_loop
	set source_file ""
	set source table
	set repeat 200
	set order sequential
	set description "SA VAS interaction loop"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[sa_confirmed] = yes"
	setcycle 0 dummy ""
	run sa_input_seq

define sequence sa_input_seq
	set flush_keyboard yes
	set description "One SA click iteration"
	run sa_mouse True
	run sa_update_script True

define mouse_response sa_mouse
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Wait for mouse click on self-assessment screen"
	set allowed_responses ""

define inline_javascript sa_update_script
	set description "Process mouse click on VAS"
	___run__
	// sa_update_script — process one mouse click on the VAS
	var mx  = parseInt(vars.cursor_x);
	var my  = parseInt(vars.cursor_y);
	var sc  = sa_sc;
	var t15 = Math.round(15 * sc);
	var t35 = Math.round(35 * sc);
	
	if (mx >= sa_scaleLeft - t15 && mx <= sa_scaleRight + t15
	        && Math.abs(my - sa_scaleY) <= t35) {
	    var tick = Math.round((mx - sa_scaleLeft) / sa_tickSpan * 10);
	    sa_selected = Math.max(0, Math.min(10, tick));
	    sa_drawCanvas(sa_selected);
	} else if (sa_selected !== null
	        && mx >= Math.round(-75*sc) && mx <= Math.round(75*sc)
	        && my >= Math.round(200*sc) && my <= Math.round(250*sc)) {
	    vars.sa_response  = sa_selected;
	    vars.sa_confirmed = "yes";
	}
	__end__
	___prepare__
	// No prepare needed.
	__end__

define loop self_assess_loop
	set source_file "self_assess_questions.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Post-block self-assessment"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run self_assess_seq

define inline_javascript self_assess_script
	set description "Slider rating question"
	___run__
	// ---------------------------------------------------------------
	// self_assess_script — Run phase (JavaScript / OSWeb)
	// Displays one self-assessment question (loaded from the loop table)
	// with a 0–10 visual analogue scale. Click to select, click Next to confirm.
	// ---------------------------------------------------------------
	// Reset trial carry-over so self-assessment rows in the CSV are blank
	// in the trial columns (and vice versa).
	vars.crit_counter     = "";
	vars.feedback         = "";
	vars.key_presses      = "";
	vars.seq_acc          = "";
	vars.seq_typed        = "";
	vars.seq_resp_keys    = "";
	vars.seq_resp_rt      = "";
	vars.seq_time         = "";
	vars.sequence_code    = "";
	vars.sequence_type    = "";
	vars.stim             = "";
	vars.task_trial_count = "";
	vars.trial_type       = "";
	let sc = vars.sc;
	let lc = vars.lang_code;
	// Question text and anchor labels come from the loop table (self_assess_questions.csv),
	// which OpenSesame/OSWeb loads automatically — access via vars.*.
	let question  = vars["self_assess_question_" + lc] || vars.self_assess_question_EN || "";
	let labelMin  = vars["label_min_"    + lc] || vars.label_min_EN    || "";
	let labelMid  = vars["label_middle_" + lc] || vars.label_middle_EN || "";
	let labelMax  = vars["label_max_"    + lc] || vars.label_max_EN    || "";
	// Replace literal \n with HTML break so multi-line labels display correctly.
	question  = question.replace(/\\n/g, "<br>");
	labelMin  = labelMin.replace(/\\n/g, "<br>");
	labelMid  = labelMid.replace(/\\n/g, "<br>");
	labelMax  = labelMax.replace(/\\n/g, "<br>");
	// VAS geometry (all values scaled to actual screen size).
	let scaleLeft  = Math.round(-380 * sc);
	let scaleRight = Math.round( 380 * sc);
	let scaleY     = Math.round(  60 * sc);
	let tickSpan   = scaleRight - scaleLeft;
	let selected   = null;
	function makeCanvas(sel) {
	    let cv = Canvas();
	    // Question text above the scale.
	    cv.text({name: "q", text: question,
	             x: 0, y: Math.round(-240 * sc),
	             color: "black", font_size: Math.round(17 * sc), html: true});
	    // Horizontal scale bar.
	    cv.line({name: "line",
	             sx: scaleLeft, sy: scaleY, ex: scaleRight, ey: scaleY,
	             color: "black", penwidth: 3});
	    // 11 tick marks (values 0–10).
	    for (let i = 0; i <= 10; i++) {
	        let tx = scaleLeft + Math.round(i * tickSpan / 10);
	        cv.line({name: "tk" + i,
	                 sx: tx, sy: scaleY - Math.round(12 * sc),
	                 ex: tx, ey: scaleY + Math.round(12 * sc),
	                 color: "black", penwidth: 2});
	    }
	    // Numeric labels at 0, 5, 10.
	    cv.text({name: "l0",  text: "0",  x: scaleLeft,  y: scaleY + Math.round(28 * sc), color: "black", font_size: Math.round(16 * sc)});
	    cv.text({name: "l5",  text: "5",  x: 0,          y: scaleY + Math.round(28 * sc), color: "black", font_size: Math.round(16 * sc)});
	    cv.text({name: "l10", text: "10", x: scaleRight, y: scaleY + Math.round(28 * sc), color: "black", font_size: Math.round(16 * sc)});
	    // Anchor labels.
	    cv.text({name: "lmin", text: labelMin, x: scaleLeft,  y: scaleY + Math.round(80 * sc), color: "black", font_size: Math.round(14 * sc), html: true});
	    cv.text({name: "lmid", text: labelMid, x: 0,          y: scaleY + Math.round(80 * sc), color: "black", font_size: Math.round(14 * sc), html: true});
	    cv.text({name: "lmax", text: labelMax, x: scaleRight, y: scaleY + Math.round(80 * sc), color: "black", font_size: Math.round(14 * sc), html: true});
	    if (sel !== null) {
	        // Highlighted circle at the selected tick.
	        let sx = scaleLeft + Math.round(sel * tickSpan / 10);
	        cv.circle({name: "sel",      x: sx, y: scaleY, r: Math.round(12 * sc), color: "#0055cc", fill: true});
	        // Next button (only visible after a selection is made).
	        cv.rect({name: "next_box",   x: Math.round(-75 * sc), y: Math.round(200 * sc),
	                 w: Math.round(150 * sc), h: Math.round(50 * sc), color: "#888888", fill: true});
	        cv.text({name: "next_lbl",   text: vars.next_msg,
	                 x: 0, y: Math.round(225 * sc), color: "white", font_size: Math.round(20 * sc)});
	    }
	    return cv;
	}
	let mouse = Mouse({visible: true});
	makeCanvas(selected).show();
	// Interaction loop: click scale to select, click Next to confirm.
	while (true) {
	    let resp = await mouse.getClick();
	    if (!resp || !resp.pos) continue;
	    let [mx, my] = resp.pos;
	    let tol15 = Math.round(15 * sc);
	    let tol35 = Math.round(35 * sc);
	    // Click on the scale bar region?
	    if (mx >= scaleLeft - tol15 && mx <= scaleRight + tol15
	            && Math.abs(my - scaleY) <= tol35) {
	        let tick = Math.round((mx - scaleLeft) / tickSpan * 10);
	        selected = Math.max(0, Math.min(10, tick));
	        makeCanvas(selected).show();
	    // Click on Next button (only active after a value is selected)?
	    } else if (selected !== null
	            && mx >= Math.round(-75 * sc) && mx <= Math.round(75 * sc)
	            && my >= Math.round(200 * sc) && my <= Math.round(250 * sc)) {
	        break;
	    }
	}
	vars.sa_response = selected;
	__end__
	___prepare__
	// No prepare-phase logic needed for OSWeb.
	__end__

define sequence self_assess_seq
	set flush_keyboard yes
	set description "One self-assessment question"
	run sa_init_script True
	run sa_input_loop True
	run logger True

define inline_javascript seq_fb_script
	set description "Feedback + criterion check"
	___run__
	// seq_fb_script — Run: practice feedback or task counter
	if (vars.run_trial !== "yes") {
	    // guard — should not reach here
	} else if (vars.block_type === "practice") {
	    var currentStim = parseInt(vars.stim);
	    var seqAcc      = parseInt(vars.seq_acc);
	    var tgt         = parseInt(vars.target_per_stim);
	    if (seqAcc === 1) {
	        stim_counters[currentStim] = (stim_counters[currentStim] || 0) + 1;
	    }
	    vars.crit_counter = stim_counters[currentStim];
	    var condColor = (vars.trial_type === "imagery") ? "purple" : "blue";
	    var fbMsg;
	    if (vars.trial_type === "imagery") {
	        fbMsg = (seqAcc===1) ? vars.correct_ima_msg : vars.incorrect_ima_msg;
	    } else {
	        fbMsg = (seqAcc===1) ? vars.correct_exe_msg : vars.incorrect_exe_msg;
	    }
	    var fbText = (fbMsg||"") + "\n\n" +
	                 vars.time_msg + ": " + vars.seq_time + " " + vars.seconds_msg +
	                 "\n\n" + vars.correct_trials_msg +
	                 stim_counters[currentStim] + " " + vars.out_of_msg + " " + tgt;
	    
	    var c = Canvas({background_color: white});
	    draw_paragraphs(c, fbText, 0, -100, SCREEN_W-200, {color:condColor, font_size:20});
	    c.show();
	    var allDone = Object.values(stim_counters).every(function(v) {
	    return v >= parseInt(vars.target_per_stim);
	    });
	    if (allDone) vars.end_block = "yes";
	} else {
	    vars.task_trial_count = parseInt(vars.task_trial_count) + 1;
	    if (vars.task_trial_count >= 2 * parseInt(vars.n_reps)) {
	        vars.end_block = "yes";
	    }
	}
	__end__
	___prepare__
	// No prepare needed.
	__end__

define loop seq_loop
	set source_file ""
	set source table
	set repeat 200
	set order sequential
	set description "Trial loop"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[end_block] = yes"
	setcycle 0 dummy ""
	run trial_seq

define inline_javascript seq_trial_end_script
	set description "Compute seq_acc, seq_time after key_press_loop"
	___run__
	// seq_trial_end_script — compute accuracy and timing
	var keyPresses = parseInt(vars.key_presses);
	var seqTyped   = keysPressed_arr.join("");
	var seqAcc     = (seqTyped === vars.sequence_code) ? 1 : 0;
	var seqTime;
	if (rtsMs_arr.length >= keyPresses && keyPresses > 1) {
	    seqTime = Math.round((rtsMs_arr[rtsMs_arr.length-1] - rtsMs_arr[0]) / 1000.0 * 1000) / 1000;
	} else {
	    seqTime = 999.0;
	}
	vars.seq_typed     = seqTyped;
	vars.seq_acc       = seqAcc;
	vars.seq_time      = seqTime;
	vars.seq_resp_keys = keysPressed_arr.join(";");
	vars.seq_resp_rt   = rtsMs_arr.map(function(r) {
	    return Math.round((r - tStart_trial) / 1000.0 * 10000) / 10000;
	}).join(";");
	__end__
	___prepare__
	// No prepare needed.
	__end__

define inline_javascript seq_trial_script
	set description "Core sequence trial"
	___run__
	// seq_trial_script — Run: show stimulus canvas, initialise key-collection state
	// Key presses collected by: key_press_loop → key_press_kb → key_update_script
	var sc         = vars.sc;
	var trialType  = vars.trial_type;
	var seqPic     = vars.sequence_picture;
	var condColor  = (trialType === "imagery") ? "purple" : "blue";
	var promptText = (msg[vars.trial_prompt_key] || "").replace(/\n/g, "<br>");
	var imgSize    = Math.round(270 * sc);
	var imgScale   = scale_for(seqPic, imgSize, imgSize);
	var boxXs      = [-115,-38,38,115].map(function(x){return Math.round(x*sc);});
	var boxY       = Math.round(290 * sc);
	var boxSize    = Math.round(54  * sc);
	// Global state shared with key_update_script and seq_trial_end_script
	keysPressed_arr = [];
	rtsMs_arr       = [];
	vars.key_count  = 0;
	tStart_trial    = Date.now();
	// Build and show canvas
	var canvasSeq = Canvas({background_color: white});
	draw_paragraphs(canvasSeq, msg[vars.trial_prompt_key]||"",
	                0, Math.round(-310*sc), SCREEN_W-200,
	                {color:condColor, font_size:22});
	canvasSeq.image({name:"seq_img", fname:seqPic, x:0, y:0, scale:imgScale});
	for (var i=0; i<4; i++) {
	    canvasSeq.rect({name:"box_"+i,
	                    x:boxXs[i]-Math.floor(boxSize/2),
	                    y:boxY-Math.floor(boxSize/2),
	                    w:boxSize, h:boxSize,
	                    color:black, fill:false, penwidth:3});
	}
	canvasSeq.show();
	__end__
	___prepare__
	// No prepare needed.
	__end__

define inline_javascript setup_script
	set description "Read language form response; load messages from CSV"
	___run__
	// setup_script — Run phase
	function readPoolCsv(name) {
	    return csvParse(pool[name].data, {columns: true});
	}
	SCREEN_W = width;
	SCREEN_H = height;
	var lang_rows = readPoolCsv("language_localiser.csv");
	vars.lang_code = "EN";
	for (var i = 0; i < lang_rows.length; i++) {
	    if (lang_rows[i].language == vars.language) {
	        vars.lang_code = lang_rows[i].ISO_code;
	        break;
	    }
	}
	msg = {};
	var msg_rows = readPoolCsv("messages.csv");
	for (var i = 0; i < msg_rows.length; i++) {
	    var mkey = msg_rows[i].message;
	    var mval = msg_rows[i][vars.lang_code] || msg_rows[i]["EN"] || "";
	    vars[mkey] = mval;
	    msg[mkey]  = mval;
	}
	// Word-wrapping paragraph renderer
	function draw_paragraphs(c, text, x, y_start, max_width, style) {
	    style = style || {};
	    var font_size      = style.font_size || 18;
	    var color          = style.color     || black;
	    var bold           = style.bold      || false;
	    var approx_char_px = font_size * 0.55;
	    var max_chars      = Math.max(10, Math.floor(max_width / approx_char_px));
	    var line_h         = Math.round(font_size * 1.5);
	    var y              = y_start;
	    var paragraphs     = String(text).split("\n");
	    for (var pi = 0; pi < paragraphs.length; pi++) {
	        var para = paragraphs[pi];
	        if (!para.trim()) { y += Math.round(line_h * 0.6); continue; }
	        var words = para.split(" ");
	        var line  = "";
	        for (var wi = 0; wi < words.length; wi++) {
	            var w    = words[wi];
	            var test = line ? line + " " + w : w;
	            if (test.length > max_chars && line) {
	                c.text({text: line, x: x, y: y, color: color,
	                        font_size: font_size, bold: bold, center: true});
	                y   += line_h;
	                line = w;
	            } else {
	                line = test;
	            }
	        }
	        if (line) {
	            c.text({text: line, x: x, y: y, color: color,
	                    font_size: font_size, bold: bold, center: true});
	            y += line_h;
	        }
	    }
	}
	__end__
	___prepare__
	// No prepare logic needed.
	__end__

define sequence trial_seq
	set flush_keyboard yes
	set description "Pre-trial + trial + feedback"
	run pre_trial_script True
	run pre_trial_kb "[run_trial] = yes"
	run seq_trial_script "[run_trial] = yes"
	run key_press_loop "[run_trial] = yes"
	run seq_trial_end_script "[run_trial] = yes"
	run seq_fb_script "[run_trial] = yes"
	run correct_sound "[run_trial] = yes and [block_type] = practice and [seq_acc] = 1"
	run incorrect_sound "[run_trial] = yes and [block_type] = practice and [seq_acc] = 0"
	run feedback_wait_correct "[run_trial] = yes and [block_type] = practice and [seq_acc] = 1"
	run feedback_wait_incorrect "[run_trial] = yes and [block_type] = practice and [seq_acc] = 0"
	run logger "[run_trial] = yes"

define keyboard_response welcome_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Waits for space"
	set allowed_responses space

define inline_javascript welcome_script
	set description "Welcome + handedness selection"
	___run__
	// welcome_script — Run phase
	// Normalise handedness: form stores localised option text.
	if (vars.handedness === vars.left_handed_msg) {
	    vars.handedness      = "left";
	    vars.conditions_file = "conditions_left.csv";
	} else {
	    vars.handedness      = "right";
	    vars.conditions_file = "conditions_right.csv";
	}
	// Load instruction slides filtered by handedness (must be after handedness is known)
	var inst_rows_all = readPoolCsv("instructions.csv");
	var lc = vars.lang_code;
	instructions_rows = [];
	for (var i = 0; i < inst_rows_all.length; i++) {
	    var r = inst_rows_all[i];
	    var h = String(r.hand || "").trim().toLowerCase();
	    if (h === vars.handedness || h === "both" || h === "") {
	        instructions_rows.push({
	            inst_msg: r["inst_msg_" + lc] || r.inst_msg_EN || "",
	            inst_pic: r.inst_pic || ""
	        });
	    }
	}
	vars.instructions_idx   = 0;
	vars.instructions_count = instructions_rows.length;
	// Show welcome screen
	var c = Canvas({background_color: white});
	draw_paragraphs(c, vars.title_msg,   0, -280, SCREEN_W - 200,
	                {color: black, font_size: 28, bold: true});
	draw_paragraphs(c, vars.welcome_msg, 0, -160, SCREEN_W - 200,
	                {color: black, font_size: 18});
	c.text({text: vars.adv_msg, x: 0, y: 330, color: black, font_size: 20});
	c.show();
	__end__
	___prepare__
	// No prepare-phase logic needed.
	__end__

define sequence welcome_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run handedness_form True
	run welcome_script True
	run welcome_kb True

