PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "Spanish", "French", "German"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['ifst_stimuli/complex_execution_left.png', 'ifst_stimuli/complex_execution_right.png', 'ifst_stimuli/complex_imagery_left.png', 'ifst_stimuli/complex_imagery_right.png', 'ifst_stimuli/correct_sound.wav', 'ifst_stimuli/incorrect_sound.wav', 'ifst_stimuli/simple_execution_left.png', 'ifst_stimuli/simple_execution_right.png', 'ifst_stimuli/simple_imagery_left.png', 'ifst_stimuli/simple_imagery_right.png', 'ifst_images/seq_complex_left.png', 'ifst_images/seq_complex_right.png', 'ifst_images/seq_execution_left.png', 'ifst_images/seq_execution_right.png', 'ifst_images/seq_imagery_left.png', 'ifst_images/seq_imagery_right.png', 'ifst_images/seq_left.png', 'ifst_images/seq_right.png', 'ifst_images/seq_simple_left.png', 'ifst_images/seq_simple_right.png', 'ifst_files/conditions_left.xlsx', 'ifst_files/conditions_right.xlsx', 'ifst_files/instructions.xlsx', 'ifst_files/self_assess_questions.xlsx']
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2025.2.4
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = iFST
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        inst_msg = ""
      Begin Routine:
        thisExp.addData("handedness", handedness)
        if hand == handedness:
            continueRoutine = True
        else:
            continueRoutine = False

        # hide mouse for the rest of the experiment
        win.mouseVisible = False
        # get column from excel sheet based on language code
        try:
            inst_msg = eval(f"inst_msg_{lang_code}")
        # default to english if this fails
        except ReferenceError:
            inst_msg = inst_msg_EN
    TextComponent task_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $title_msg
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    TextComponent inst_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos [set every repeat] = (text_x, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_msg
      wrapWidth = 0.8
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    TextComponent advance_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    ImageComponent inst_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $inst_pic
      pos = (0.5, 0)
      saveStartStop = False
      size [set every repeat] = (image_w, image_h)
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
    RoutineSettingsComponent bye
      stopVal [duration (s)] = 3
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    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Routine:
        handedness = ""
      Each Frame:
        clicked = mouse.getPressed()[0]

        if clicked:
            if mouse.isPressedIn(left_poly):
                handedness = "left"
                continueRoutine = False
            elif mouse.isPressedIn(right_poly):
                handedness = "right"
                continueRoutine = False
      End Routine:
        thisExp.addData("handedness", handedness)

        if handedness == "left":
            conditions_file = "ifst_files/conditions_left.xlsx"
        else:
            conditions_file = "ifst_files/conditions_right.xlsx"
    TextComponent title_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $title_msg
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent handedness_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $handedness_msg
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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    ButtonComponent button_left
      bold = True
      borderColor = 0.6549, 0.6549, 0.6549
      callback = handedness = "left"
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      fillColor = 0.6549, 0.6549, 0.6549
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      size = (0.3, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $left_handed_msg
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    ButtonComponent button_right
      bold = True
      borderColor = 0.6549, 0.6549, 0.6549
      callback = handedness = "right"
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      fillColor = 0.6549, 0.6549, 0.6549
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.2, -0.3)
      size = (0.3, 0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $right_handed_msg
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    PolygonComponent left_poly
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (-0.2, -0.3)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent right_poly
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 0.6549, 0.6549, 0.6549
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_handed_msg
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    TextComponent right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_handed_msg
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    MouseComponent mouse
      clickable = left_poly, right_poly
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine exp_settings
    RoutineSettingsComponent exp_settings
      saveStartStop = False
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    CodeComponent exp_settings_code
      Code Type = Both
      Begin Experiment:
        ### CODE DOES NOT AUTOTRANSLATE ###

        # block settings
        n_stimuli = 4 # exe-ima and simple-complex sequences
        # n_stimuli is not really used
        practice_blocks = 1 # number of practice blocks
        feedback = True # variable for settings in practice/test blocks
        # parameters for criterion in practice block
        stim_counters = {1: 0, 2: 0, 3: 0, 4: 0} # counters
        # the number of counter should match with the number of stimuli
        target_per_stim = 2 # whatever criterion
        task_blocks = 2 # number of task blocks
        total_blocks = practice_blocks + task_blocks
        ##### IMPORTANT VARIABLE #######
        n_reps = 10  # repetitions per task block
        ################################
        # placeholder variables:
        reps_per_block = 1 # variable to control reps in a block
        block_number = 0 # initialize variable for output
        color_text = "" # initialize variable
        self_assess_show = 0 # variable to show self-assessment loop
        sequence = "simple" # placeholder, it's updated later
        # settings for max/min time of breaks between blocks
        reg_max_pause = 60 # maximum time in seconds
        min_pause = 0 # minimum time in seconds
      Begin JS Experiment:
        n_stimuli = 4;
        practice_blocks = 1;
        feedback = true;
        stim_counters = {[1]: 0, [2]: 0, [3]: 0, [4]: 0};
        target_per_stim = 2;
        task_blocks = 2;
        total_blocks = (practice_blocks + task_blocks);
        n_reps = 10;
        reps_per_block = 1;
        block_number = 0;
        color_text = "";
        self_assess_show = 0;
        sequence = "simple";
        reg_max_pause = 60;
        min_pause = 0;
      Begin JS Routine:
        // group = Number.parseInt(counterbalance.group);
      Begin Routine:
        group = int(counterbalance.group)
        # we use this variable to counterbalance the conditions
        # see code in the block_start routine.
        # The orders are:
        # group == 0: simple-complex
        # group == 1: complex-simple
    CodeComponent sound_device_code
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        from psychopy import prefs
        prefs.hardware['audioDevice'] = 'Haut-parleur (Realtek(R) Audio)'
        prefs.hardware['audioLib'] = ['ptb']
    CodeComponent random_order_code
      Code Type = JS
      Begin JS Routine:
        group = Math.random() < 0.5 ? 0 : 1;
        // we use this variable to counterbalance the conditions
        // see code in the block_start routine.
        // The orders are:
        // group == 0: simple-complex
        // group == 1: complex-simp
  Routine block_start
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    CodeComponent block_code
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor = 'none';
        block_number += 1;
        screen_timer = new util.Clock();
        if ((block_number === 1)) {
            block_message = block_first_msg;
        } else {
            if ((block_number === (practice_blocks + 1))) {
                block_message = block_intro_task_msg;
            } else {
                block_message = block_msg_standard;
            }
        }
      Begin Routine:
        # DOES NOT AUTO-TRANSLATE!!!

        win.mouseVisible = False
        # start block at 1 and increase every iteration
        block_number += 1
        # initialize timer
        screen_timer = core.Clock()
        # set up block messages according to task progress
        # and minimum time for pauses
        if block_number == 1:
            # practice block
            block_message = block_first_msg
        elif block_number == practice_blocks + 1:
            # first task block
            block_message = block_intro_task_msg
        else:
            # after block
            block_message = block_msg_standard
      Each Frame:
        # show timer
        elapsed = screen_timer.getTime()
        minutes = int(elapsed // 60)
        seconds = int(elapsed % 60)
        timer_text = f"{minutes:02d}:{seconds:02d}"

        # stop routine when we reach the maximum time
        if seconds >= reg_max_pause:
            continueRoutine = False
      Each JS Frame:
        elapsed = screen_timer.getTime();
        minutes = Math.floor(elapsed / 60);
        seconds = Math.floor(elapsed % 60);
        timer_text = `${minutes.toString().padStart(2, '0')}:${seconds.toString().padStart(2, '0')}`;
        if ((seconds >= reg_max_pause)) {
            continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData("block_number", block_number);
        psychoJS.experiment.addData("block_pause", seconds);
      End Routine:
        thisExp.addData("block_number", block_number)
        thisExp.addData("block_pause", seconds)
    TextComponent block_main_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
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    TextComponent block_number_text
      color = -1.0000, 0.4980, 1.0000
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg + ' ' + str(block_number) + ' ' + out_of_msg + ' ' + str(total_blocks) 
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    KeyboardComponent block_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $min_pause
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    TextComponent block_start_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = $min_pause
      text [set every repeat] = $adv_msg
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    TextComponent timer
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.8, -0.45)
      startVal [time (s)] = 0.0
      text [set every frame] = $timer_text
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    CodeComponent block_settings_code
      Code Type = Auto->JS
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      End Routine:
        # change conditions based on block
        if block_number <= practice_blocks:
            feedback = True
            reps_per_block = 999
            self_assess_show = 0
            sequence = sequence
        elif block_number == practice_blocks + 1:
            feedback = False
            reps_per_block = n_reps
            self_assess_show = 1
            if group == 0:
                sequence = "simple"
            elif group == 1:
                sequence = "complex"
        elif block_number == practice_blocks + 2:
            feedback = False
            reps_per_block = n_reps
            self_assess_show = 1
            if group == 0:
                sequence = "complex"
            elif group == 1:
                sequence = "simple"
        thisExp.addData("reps_per_block", reps_per_block)
        thisExp.addData("sequence_selected", sequence)
  Routine countdown
    RoutineSettingsComponent countdown
      stopVal [duration (s)] = 3.5
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine block_end
    RoutineSettingsComponent block_end
      disabled = True
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    CodeComponent block_end_code
      Code Type = Auto->JS
      Begin Routine:
        # get results in this block
    TextComponent block_end_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_end_msg
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  Routine seq_trial
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    CodeComponent seq_trial_code
      Code Type = Both
      Begin Experiment:
        key_count = 0
        prompt = ""
        fill1 = ""
        fill2 = ""
        fill3 = ""
        fill4 = ""
      Begin JS Experiment:
        key_count = 0;
        prompt = "";
        fill1 = "";
        fill2 = "";
        fill3 = "";
        fill4 = "";
      Begin JS Routine:
        current_stim = Number.parseInt(stim);
        if ((block_number > practice_blocks)) {
            if ((sequence_type === sequence)) {
                continueRoutine = true;
            } else {
                continueRoutine = false;
            }
        }
        if ((block_number <= practice_blocks)) {
            if ((stim_counters[current_stim] >= target_per_stim)) {
                continueRoutine = false;
            }
        }
        [fill1, fill2, fill3, fill4] = ["black", "black", "black", "black"];
        seq_timer = new util.Clock();
        seq_timer.reset();
        previous_key_count = 0;
        current_key_count = 0;
        last_key = "";
        psychoJS.window.mouseVisible = false;
        seq_resp.keys = [];
        key_count = 0;
        seq_resp.rt = [];
        if ((trial_type === "imagery")) {
            prompt = prompt_ima_msg;
            color_text = "purple";
        } else {
            if ((trial_type === "execution")) {
                prompt = prompt_exe_msg;
                color_text = "blue";
            }
        }
        console.log('BEGIN ROUTINE name=RUTINA_X:', {
          block_number: block_number,
          practice_blocks: practice_blocks,
          sequence_type: sequence_type,
          sequence: sequence,
          time: performance.now()
        });
      Begin Routine:
        # Trial settings depending on condition
        current_stim = int(stim)
        # in test blocks, skip routine based on counterbalancing
        if block_number > practice_blocks:
            if sequence_type == sequence:
                continueRoutine = True
            else:
                continueRoutine = False
        # in practice blocks, show only if counter is not complete
        if block_number <= practice_blocks:
            if stim_counters[current_stim] >= target_per_stim:
                continueRoutine = False

        # Initialize variables
        fill1, fill2, fill3, fill4 = 'black', 'black', 'black', 'black'  # Default color
        seq_timer = core.Clock() # create timer
        seq_timer.reset() # start timer at 0
        # Initialize variables to count keys and end routine
        # based on number of key presses
        previous_key_count = 0
        current_key_count = 0
        last_key = ""
        win.mouseVisible = False
        seq_resp.keys = []
        key_count = 0
        seq_resp.rt = []
        # change color and prompt based on condition (old)
        if trial_type == "imagery":
            prompt = prompt_ima_msg
            color_text = "purple"
        elif trial_type == "execution":
            prompt = prompt_exe_msg
            color_text = "blue"
      Each Frame:
        # At the beginning, no key has been pressed
        # We initialize the list of key presses
        if seq_resp.keys is None:
            seq_resp.keys = []

        # set variable to count the number of keys
        current_key_count = len(seq_resp.keys) # use the native variable from component

        # Check if a key has been pressed
        if current_key_count > previous_key_count:
            key_count += 1
            last_key = seq_resp.keys[-1]  # Get the latest key pressed
            seq_timer.reset()  # Reset the timer to 0 whenever a new key is pressed
            if feedback == True:
                if last_key == "f":
                    fill1, fill2, fill3, fill4 = 'white', 'black', 'black', 'black'
                elif last_key == "g":
                    fill1, fill2, fill3, fill4 = 'black', 'white', 'black', 'black'
                elif last_key == "h":
                    fill1, fill2, fill3, fill4 = 'black', 'black', 'white', 'black'
                elif last_key == "j":
                    fill1, fill2, fill3, fill4 = 'black', 'black', 'black', 'white'
            elif feedback == False:
                fill1 = fill2 = fill3 = fill4 = 'black'
        else:
            key_count = key_count

        # Update the previous key count for the next frame
        previous_key_count = current_key_count

        # Check timer and get back to black after a couple of ms
        if seq_timer.getTime() >= 0.1:
            fill1, fill2, fill3, fill4 = 'black', 'black', 'black', 'black'

        # End trial when reaching expected number of keys
        if key_count == key_presses:
            continueRoutine = False
      Each JS Frame:
        if ((block_number > practice_blocks) && (sequence_type !== sequence)) {
            continueRoutine = false;
        }

        if ((seq_resp.keys === undefined)) {
            seq_resp.keys = [];
        }
        current_key_count = seq_resp.keys.length;
        if ((current_key_count > previous_key_count)) {
            key_count += 1;
            last_key = seq_resp.keys.slice((- 1))[0];
            seq_timer.reset();
            if ((feedback === true)) {
                if ((last_key === "f")) {
                    [fill1, fill2, fill3, fill4] = ["white", "black", "black", "black"];
                } else {
                    if ((last_key === "g")) {
                        [fill1, fill2, fill3, fill4] = ["black", "white", "black", "black"];
                    } else {
                        if ((last_key === "h")) {
                            [fill1, fill2, fill3, fill4] = ["black", "black", "white", "black"];
                        } else {
                            if ((last_key === "j")) {
                                [fill1, fill2, fill3, fill4] = ["black", "black", "black", "white"];
                            }
                        }
                    }
                }
            } else {
                if ((feedback === false)) {
                    fill1 = fill2 = fill3 = fill4 = "black";
                }
            }
        } else {
            key_count = key_count;
        }
        previous_key_count = current_key_count;
        if ((seq_timer.getTime() >= 0.1)) {
            [fill1, fill2, fill3, fill4] = ["black", "black", "black", "black"];
        }
        if ((key_count === key_presses)) {
            continueRoutine = false;
        }
        console.log('EACH FRAME name=RUTINA_X (start):', {
          block_number: block_number,
          practice_blocks: practice_blocks,
          sequence_type: sequence_type,
          sequence: sequence,
          key_count: typeof key_count !== 'undefined' ? key_count : null,
          key_presses: typeof key_presses !== 'undefined' ? key_presses : null,
          continueRoutine_now: typeof continueRoutine !== 'undefined' ? continueRoutine : 'undef',
          time: performance.now()
        });
      End JS Routine:
        seq_typed = seq_resp.keys.join("");
        seq_acc = ((seq_typed === sequence_code) ? 1 : 0);
        if ((seq_resp.rt && (seq_resp.rt.length >= key_presses))) {
            last_press = (key_presses - 1);
            seq_time = (seq_resp.rt[last_press] - seq_resp.rt[0]);
            seq_time = util.round(seq_time, 2);
        } else {
            seq_time = 999;
        }
        psychoJS.experiment.addData("seq_typed", seq_typed);
        psychoJS.experiment.addData("seq_acc", seq_acc);
        psychoJS.experiment.addData("seq_time", seq_time);
      End Routine:
        # create a string with the key presses
        seq_typed = "".join(seq_resp.keys)
        # the output will be "fghjjhgf"

        # compare with variable hosting correct response
        seq_acc = 1 if seq_typed == sequence_code else 0

        # calculate time to finish the sequence
        # as the trial does not finish until a given N of key presses
        # we can calculate the time as the last minus the first items
        # regardless of the type of trial
        # we use key_presses as this variable may change every trial depending
        # on trial type (e.g. execution vs imagery)
        if seq_resp.rt and len(seq_resp.rt) >= key_presses:
            last_press = key_presses - 1  # Index of last expected press
            seq_time = seq_resp.rt[last_press] - seq_resp.rt[0]
            seq_time = round(seq_time, 2)
        else:
            seq_time = 999  # Fallback in case of missing responses
        # save to output
        thisExp.addData("seq_typed", seq_typed)
        thisExp.addData("seq_acc", seq_acc)
        thisExp.addData("seq_time", seq_time)
    TextComponent prompt_text
      color [set every repeat] = $color_text
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt
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    PolygonComponent fix_cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ImageComponent seq_image
      image [set every repeat] = $sequence_picture
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent box_F
      fillColor [set every frame] = $fill1
      lineColor [set every frame] = $fill1
      pos = (-0.15, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_G
      fillColor [set every frame] = $fill2
      lineColor [set every frame] = $fill2
      pos = (-0.05, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_H
      fillColor [set every frame] = $fill3
      lineColor [set every frame] = $fill3
      pos = (0.05, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_J
      fillColor [set every frame] = $fill4
      lineColor [set every frame] = $fill4
      pos = (0.15, -0.4)
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    KeyboardComponent seq_resp
      allowedKeys = 'f','g','h','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine seq_fb
    RoutineSettingsComponent seq_fb
      stopVal [duration (s)] = $fb_dur
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    CodeComponent seq_fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        fb_dur = 3
      Begin Routine:
        win.mouseVisible = False
        current_stim = int(stim)
        if block_number <= practice_blocks:
            if seq_acc == 1:
                fb_dur = 3
                corr_vol = 1
                incorr_vol = 0
                stim_counters[current_stim] += 1
            elif seq_acc == 0:
                fb_dur = 5
                corr_vol = 0
                incorr_vol = 1
                # practice block, show always if counter is not reached
            if stim_counters[current_stim] <= target_per_stim:
                continueRoutine = True
            if stim_counters[current_stim] == 100:
                continueRoutine = False
                stim_counters[current_stim] = 100 # keep it
            thisExp.addData("crit_counter", stim_counters[current_stim])
        else:
            continueRoutine = False

        if trial_type == "imagery":
            color_text = "purple"
            if seq_acc == 1:
                fb_message = correct_ima_msg
            elif seq_acc == 0:
                fb_message = incorrect_ima_msg
        elif trial_type == "execution":
            color_text = "blue"
            if seq_acc == 1:
                fb_message = correct_exe_msg
            elif seq_acc == 0:
                fb_message = incorrect_exe_msg
    TextComponent seq_fb_text
      color [set every repeat] = $color_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_message + '\n\n' + time_msg + ': ' + str(seq_time) + ' ' + seconds_msg +  '\n\n' + correct_trials_msg + '\n\n' + str(stim_counters[current_stim]) + ' ' + out_of_msg + ' ' + str(target_per_stim)
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    CodeComponent end_routine_code
      Code Type = Both
      End JS Routine:
        if (block_number <= practice_blocks) {
            allReached = Object.values(stim_counters).every(value => value >= target_per_stim);
            if (allReached) {
                seq_loop.finished = true;
                reps_per_block = 0;
            }
        }
      End Routine:
        ## DOES NOT AUTO-TRANSLATE!!!!

        # check if the counters are complete
        if block_number <= practice_blocks:
            if all(value >= target_per_stim for value in stim_counters.values()):
                seq_loop.finished = True
                reps_per_block = 0
    SoundComponent sound_corr
      forceEndRoutine = False
      sound [set every repeat] = ifst_stimuli/correct_sound.wav
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 1
      volume [set every repeat] = corr_vol
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    SoundComponent sound_incorr
      forceEndRoutine = False
      sound [set every repeat] = ifst_stimuli/incorrect_sound.wav
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 1
      volume [set every repeat] = incorr_vol
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  Routine pre_trial
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    CodeComponent pre_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        prompt_before = ""
      Begin Routine:
        # in test blocks, skip routine based on counterbalancing
        if block_number > practice_blocks:
            if sequence_type == sequence:
                continueRoutine = True
            else:
                continueRoutine = False
        current_stim = int(stim)
        # in practice blocks, show only if counter is not complete
        if block_number <= practice_blocks:
            if stim_counters[current_stim] == target_per_stim:
                stim_counters[current_stim] = 100
            if stim_counters[current_stim] >= target_per_stim:
                continueRoutine = False
        print(stim_counters[current_stim])
        win.mouseVisible = False

        # Set color for text and update prompts
        if trial_type == "imagery":
            prompt_before = pre_prompt_ima_msg
            color_text = "purple"
        elif trial_type == "execution":
            prompt_before = pre_prompt_exe_msg
            color_text = "blue"
    TextComponent prompt_before_text
      color [set every repeat] = $color_text
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt_before
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    KeyboardComponent adv_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_text
      color [set every repeat] = $color_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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  Routine self_assess
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    CodeComponent self_assess_code
      Code Type = Both
      Begin Experiment:
        self_assess_question = ""
        label_min = ""
        label_middle = ""
        label_max = ""
      Begin JS Experiment:
        self_assess_question = "";
        label_min = "";
        label_middle = "";
        label_max = "";
      Begin JS Routine:
        document.body.style.cursor = 'default';
        try {
            self_assess_question = eval(`self_assess_question_${lang_code}`);
            label_min = eval(`label_min_${lang_code}`);
            label_middle = eval(`label_middle_${lang_code}`);
            label_max = eval(`label_max_${lang_code}`);
        } catch(e) {
            if ((e instanceof ReferenceError)) {
                self_assess_question = self_assess_question_EN;
                label_min = label_min_EN;
                label_middle = label_middle_EN;
                label_max = label_max_EN;
            } else {
                throw e;
            }
        }
      Begin Routine:
        win.mouseVisible = True
        # fetch language localisation from excel sheet
        try:
            self_assess_question = eval(f"self_assess_question_{lang_code}")
            label_min = eval(f"label_min_{lang_code}")
            label_middle = eval(f"label_middle_{lang_code}")
            label_max = eval(f"label_max_{lang_code}")
        except ReferenceError:
            self_assess_question = self_assess_question_EN
            label_min = label_min_EN
            label_middle = label_middle_EN
            label_max = label_max_EN
      Each JS Frame:
        if ((slider.rating !== undefined)) {
            poly_pos = [5, 5];
        }
    TextboxComponent self_assess_text
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.18)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $self_assess_question
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    SliderComponent slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, 0.4980, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = (0,'','','','','|','','','','',10)
      letterHeight = 0.05
      pos = (0, -0.05)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextboxComponent label_0
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_min
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    TextboxComponent label_5
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_middle
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    TextboxComponent label_10
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.5, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_max
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    MouseComponent mouse_2
      clickable = next_poly
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = slider.rating
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    PolygonComponent next_poly
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = 1.0000, 1.0000, 1.0000
      pos = (0.45, -0.4)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [condition] = slider.rating
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    TextComponent next_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0.45, -0.4)
      startVal [condition] = slider.rating
      text [set every repeat] = $next_msg
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  Routine fb
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_time_x = 0
        fb_time_y = 0
        fb_taps_x = 0
        fb_taps_y = 0
      Begin Routine:
        # Only provide feedback if we're in the practice block
        if feedback == True and inst_file == "instructions_execution.xlsx":
            # show both feedback based on time and tap accuracy
            fb_time_x = 0
            fb_time_y = 0
            fb_taps_x = 0
            fb_taps_y = -0.2
        elif feedback == True and inst_file == "instructions_imagery.xlsx":
            # only show feedback on time
            fb_time_x = 0
            fb_time_y = 0
            fb_taps_x = -2 # set to very large value which is out of screen
            fb_taps_y = -2
        elif feedback == False:
            # not show any feedback
            fb_time_x = -2
            fb_time_y = -2
            fb_taps_x = -2
            fb_taps_y = -2
    TextboxComponent trial_text
      bold = False
      color = -1.0000, 0.4980, 1.0000
      editable = False
      letterHeight = 0.07
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_msg + ' ' + str(trial_n) + ' ' + out_of_msg + ' ' + str(trials_block)
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    TextboxComponent fb_text_time
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos [set every repeat] = (fb_time_x, fb_time_y)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $time_msg + '\n\n' + str(round(space_duration, 2)) + ' ' + second_msg
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    TextboxComponent fb_text_taps
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos [set every repeat] = (fb_taps_x, fb_taps_y)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $taps_msg + '\n\n' + str(n_correct) + ' ' + out_of_msg + ' ' + str(key_presses)
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    TextboxComponent fb_text_detail
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      editable = False
      letterHeight = 0.04
      pos [set every repeat] = (0, fb_pos)
      size = (0.7, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Number of taps: ' + str(n_taps) + '\nNumber of spaces: ' + str(n_spaces) + '\nNumber of errors: ' + str(n_errors) + '\nAverage error distance (% screen): ' + str(mean_error) + '\n\nAverage tap-space time (ms): ' + str(mean_diff) + '\n\nTrial duration (s):\nTaps: ' + str(tap_duration) + '\nSpaces: ' + str(space_duration)
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    TextComponent fb_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    KeyboardComponent adv_fb_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine load_lg
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    CodeComponent update_language_code
      Code Type = Auto->JS
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      Begin Experiment:
        # we define "lang_code" which is our variable to
        # be used for the language localisation dynamically
        # we set it to English as default language
        lang_code = "EN"
        thisExp.addData("language_code", lang_code)
      Begin Routine:
        # we put this code at the beginning of the routine.
        # at this point the language has already been selected
        # in the dialogue box by the participant

        # now we update the language code based on the
        # language localiser variable ISO_code
        if language == expInfo['language']:
            lang_code = ISO_code

        thisExp.addData("language_code", lang_code)  # add it to output

        # this way now lang_code has the value of ISO_code
        # where language in our Excel sheet matches with the
        # language selected by the participant
  Routine update_msg
    RoutineSettingsComponent update_msg
      saveStartStop = False
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    CodeComponent update_messages_code
      Code Type = Both
      Begin JS Routine:
        // change code that does not auto-translate correctly
        // we use window instead of globals()
        // to create the global variables
        // the rest is the same
        msg_name = message;
        msg_value = eval(lang_code);
        window[msg_name] = msg_value; // here is the change
        psychoJS.experiment.addData("msg_name", msg_name);
        psychoJS.experiment.addData("msg_value", msg_value);
      Begin Routine:
        ## THIS CODE DOES NOT AUTO-TRANSLATE!!!!

        # now that we have selected our new language (lang_code)
        # we can use a loop to iterate over the messages
        # every iteration, we're gonna update the value of our
        # global variables with the value corresponding to the
        # lang_code (ISO_code from the language localiser)
        # this way we don't need to manually specify the text

        # this iteration, select the message
        msg_name = message  # e.g. variable "welcome_msg"
        # for this iteration, assign the value based on code
        msg_value = eval(lang_code) # e.g. "Bienvenido" if lang_code = "ES"
        # update message based on code
        globals()[msg_name] = msg_value  # e.g. should update the value of welcome_msg by "Bienvenido"
        # finally we add the values to output just to check
        thisExp.addData("msg_name", msg_name)
        thisExp.addData("msg_value", msg_value)
  Routine test
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Test 
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  Routine demographics
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    CodeComponent demo_code
      Code Type = Auto->JS
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      Begin Routine:
        # make mouse visible
        win.mouseVisible = True
    TextComponent demographics_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographics_msg
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    TextComponent age_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $age_msg
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    TextboxComponent age_textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.03
      placeholder = ...
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent gender_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gender_msg
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    SliderComponent gender_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '', '', '', '')
      letterHeight = 0.025
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextboxComponent label_female
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f_msg
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    TextboxComponent label_male
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.3, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $m_msg
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    TextboxComponent label_transgender
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.0275
      lineSpacing = 0.8
      pos = (-0.1, -0.1)
      size = (0.18, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tg_msg
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    TextboxComponent label_nonbinary
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.1, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nb_msg
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    TextboxComponent label_other
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.3, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $o_msg
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    TextboxComponent label_prefer_not_say
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.022
      lineSpacing = 0.8
      pos = (0.5, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pns_msg
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    TextComponent laterality_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $laterality_msg
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    SliderComponent laterality_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '')
      letterHeight = 0.025
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextboxComponent label_left
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.25, -0.45)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_msg
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    TextboxComponent label_ambi
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0, -0.45)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ambi_msg
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    TextboxComponent label_right
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.25, -0.45)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_msg
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    PolygonComponent next_poly_2
      fillColor = 0.6078, -0.2784, -0.2784
      lineColor = 0.6078, -0.2784, -0.2784
      pos = (0.7, -0.35)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent next_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0.7, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $next_msg
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    MouseComponent mouse_demo
      clickable = next_poly_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  CounterbalanceRoutine counterbalance
    disabled = True
    endExperimentOnDepletion = True
    nGroups = 2
    nReps = 100
    nSlots = 1
    saveData = True
    saveRemaining = True
    specMode = uniform
Flow
  CounterbalanceRoutine counterbalance
  Routine exp_settings
  LoopInitiator lang_loop loopType="TrialHandler"
    conditionsFile = language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'}]
    Routine load_lg
  LoopTerminator lang_loop
  LoopInitiator messages_loop loopType="TrialHandler"
    conditionsFile = messages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'message': 'title_msg', 'EN': 'Imagined Finger Sequence Task\n(iFST)', 'ES': 'Tarea de Secuencia de Dedos Imaginada\n(TSDi)', 'FR': 'x'},
      {'message': 'welcome_msg', 'EN': 'Welcome to the task!\n\nThe goal of this task is to assess your ability to imagine finger movements.', 'ES': 'Bienvenido/a a la tarea!\n\nEl objetivo de esta tarea es valorar tu capacidad para imaginar movimientos con los dedos.', 'FR': 'x'},
      {'message': 'adv_msg', 'EN': 'Press SPACE to continue', 'ES': 'Presiona ESPACIO para continuar', 'FR': 'x'},
      {'message': 'bye_msg', 'EN': 'You have finished the experiment\n\nThank you very much for taking part!\n\nThe experiment will close in 3 seconds', 'ES': 'Has terminado el experimento\n\nGracias por participar!\n\nEl experimento se cerrará en 3 segundos', 'FR': 'x'},
      {'message': 'correct_msg', 'EN': 'Correct', 'ES': 'Correcto', 'FR': 'x'},
      {'message': 'incorrect_msg', 'EN': 'Incorrect', 'ES': 'Incorrecto', 'FR': 'x'},
      {'message': 'time_msg', 'EN': 'Time', 'ES': 'Tiempo', 'FR': 'x'},
      {'message': 'seconds_msg', 'EN': 'seconds', 'ES': 'seconds', 'FR': 'x'}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
    Routine update_msg
  LoopTerminator messages_loop
  Routine welcome
  Routine demographics
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = ifst_files/instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'hand': 'right', 'inst_pic': 'ifst_images/seq_right.png', 'image_w': 0, 'image_h': 0, 'text_x': 0, 'inst_msg_EN': 'In this task you will type or imagine typing two 8-digit sequences with your RIGHT hand. Sometimes you will PHYSICALLY type the sequence. Other times you will only IMAGINE typing the sequence. During imagery, you will be asked to focus on BOTH the: \n\nVISUAL aspects of the movement (i.e. imagining SEEING your fingers moving from an INTERNAL point of view or FIRST-PERSON perspective)\n\nKINESTHETIC aspects of the movement (i.e. imagining FEELING your muscles contracting and your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,
      {'hand': 'left', 'inst_pic': 'ifst_images/seq_left.png', 'image_w': 0, 'image_h': 0, 'text_x': 0, 'inst_msg_EN': 'In this task you will type or imagine typing two 8-digit sequences with your LEFT hand. Sometimes you will PHYSICALLY type the sequence. Other times you will only IMAGINE typing the sequence. During imagery, you will be asked to focus on BOTH the: \n\nVISUAL aspects of the movement (i.e. imagining SEEING your fingers moving from an INTERNAL point of view or FIRST-PERSON perspective)\n\nKINESTHETIC aspects of the movement (i.e. imagining FEELING your muscles contracting and your joi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,
      {'hand': 'right', 'inst_pic': 'ifst_images/seq_right.png', 'image_w': 0.5, 'image_h': 0.4, 'text_x': -0.3, 'inst_msg_EN': 'For the task you will use the four fingers of your dominant hand.\n\nPlease place your right hand on the keyboard with your fingers on the buttons shown:\n\nF = Index\nG = Middle\nH = Ring\nJ = Little\n\nThroughout the task, please maintain your hand in this position.', 'inst_msg_ES': 'Para realizar la tarea, utilizarás los cuatro dedos de tu mano dominante.\n\nColoca tu mano derecha sobre el teclado con los dedos sobre las teclas que se indican a continuación:\n\nF = Índi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,
      {'hand': 'left', 'inst_pic': 'ifst_images/seq_left.png', 'image_w': 0.5, 'image_h': 0.4, 'text_x': -0.3, 'inst_msg_EN': 'For the task you will use the four fingers of your dominant hand.\n\nPlease place your hand on the keyboard with your fingers on the buttons shown:\n\nJ = Index\nH = Middle\nG = Ring\nF = Little\n\nThroughout the task, please maintain your hand in this position.', 'inst_msg_ES': 'Para realizar la tarea, utilizarás los cuatro dedos de tu mano dominante.\n\nColoca tu mano sobre el teclado con los dedos sobre las teclas que se indican a continuación:\n\nJ = Índice\nH = Medio\nG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
    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = total_blocks
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    Routine block_start
    LoopInitiator seq_loop loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = reps_per_block
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      conditions:
        [{'hand': 'right', 'stim': 1, 'sequence_code': 'fghjjhgf', 'sequence_type': 'simple', 'trial_type': 'execution', 'key_presses': 8, 'sequence_picture': 'stimuli/simple_execution_right.png', 'prompt_before_EN': 'In the next trial, you will have to PHYSICALLY EXECUTE the movement.\n\nRemember you have to press ALL the keys.', 'prompt_EN': 'Physically EXECUTE this sequence\n(press all keys).', 'prompt_before_ES': 'En el próximo intento, tienes que EJECUTAR FÍSICAMENTE el movimiento.\n\nRecuerda que debes presionar TODAS las teclas.', 'prompt_ES': 'EJECUTA físicamente esta secuencia\n(presiona toda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,
        {'hand': 'left', 'stim': 1, 'sequence_code': 'jhgffghj', 'sequence_type': 'simple', 'trial_type': 'execution', 'key_presses': 8, 'sequence_picture': 'stimuli/simple_execution_left.png', 'prompt_before_EN': 'In the next trial, you will have to PHYSICALLY EXECUTE the movement.\n\nRemember you have to press ALL the keys.', 'prompt_EN': 'Physically EXECUTE this sequence\n(press all keys).', 'prompt_before_ES': 'En el próximo intento, tienes que EJECUTAR FÍSICAMENTE el movimiento.\n\nRecuerda que debes presionar TODAS las teclas.', 'prompt_ES': 'EJECUTA físicamente esta secuencia\n(presiona todas l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,
        {'hand': 'right', 'stim': 2, 'sequence_code': 'ff', 'sequence_type': 'simple', 'trial_type': 'imagery', 'key_presses': 2, 'sequence_picture': 'stimuli/simple_imagery_right.png', 'prompt_before_EN': 'In the next trial, you will have to IMAGINE the movement\n\nPlease, focus on BOTH SEEING AND FEELING the movement\n\nRemember you only need to press the FIRST and LAST keys', 'prompt_EN': 'IMAGINE this sequence\n(press only the First/Last keys).', 'prompt_before_ES': 'En el próximo intento, tienes que IMAGINAR el movimiento\n\nPor favor concéntrato TANTO EN VER COMO EN SENTIR el movimiento\n\nRecue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,
        {'hand': 'left', 'stim': 2, 'sequence_code': 'jj', 'sequence_type': 'simple', 'trial_type': 'imagery', 'key_presses': 2, 'sequence_picture': 'stimuli/simple_imagery_left.png', 'prompt_before_EN': 'In the next trial, you will have to IMAGINE the movement\n\nPlease, focus on BOTH SEEING AND FEELING the movement\n\nRemember you only need to press the FIRST and LAST keys', 'prompt_EN': 'IMAGINE this sequence\n(press only the First/Last keys).', 'prompt_before_ES': 'En el próximo intento, tienes que IMAGINAR el movimiento\n\nPor favor concéntrato TANTO EN VER COMO EN SENTIR el movimiento\n\nRecuerd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
      Routine pre_trial
      Routine seq_trial
      Routine seq_fb
    LoopTerminator seq_loop
    LoopInitiator self_assess_loop loopType="TrialHandler"
      conditionsFile = ifst_files/self_assess_questions.xlsx
      loopType = sequential
      nReps = self_assess_show
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      conditions:
        [{'self_assess_question_EN': 'Please, respond the following questions about the imagery you performed in the LAST block.\nUse the mouse.\n\nIn the last block, the INSTRUCTION when IMAGINING the movement was to use:', 'label_min_EN': 'A visual\nmodality only', 'label_middle_EN': 'Both modalities\nat the same time', 'label_max_EN': 'A kinesthetic\nmodality only', 'self_assess_question_ES': 'Por favor, responde las siguientes preguntas sobre la imaginería que has realizado en el ÚLTIMO bloque.\nUsa el ratón.\n\nEn el último bloque la INSTRUCCIÓN durante la imaginación fue que usaras:', 'label_min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,
        {'self_assess_question_EN': 'When imagining the movement, what was the OVERALL VIVIDNESS (considering BOTH the clarity of the image AND the intensity of the sensations)? Only if you did not feel or see anything at all, then select 0.', 'label_min_EN': 'No image at all, you only\n"know" that you were\nthinking of the movement', 'label_middle_EN': '  ', 'label_max_EN': 'Perfectly clear and vivid as\nnormal vision and/or\nfeel of movement', 'self_assess_question_ES': 'Al imaginar el movimiento,  ¿cuál fue tu VIVEZA GENERAL (considerando TANTO la claridad de la imaginen COMO la intensidad de las s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,
        {'self_assess_question_EN': 'When imagining the movement, did you imagine yourself making errors (e.g. pressing the wrong key)? Only if you imagined NO ERRORS in the WHOLE BLOCK, then select 0.', 'label_min_EN': 'No errors, I was\ncompletely accurate\nduring imagery', 'label_middle_EN': '  ', 'label_max_EN': 'A lot of errors, I was\ncompletely inaccurate\nduring imagery', 'self_assess_question_ES': 'Al imaginar el movimiento,  ¿lo has imaginado cometiendo errores (es decir, presionar la tecla incorrecta)? Solo si no has imaginado NINGÚN ERROR en TODO el bloque, selecciona 0.', 'label_min_ES': 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,
        {'self_assess_question_EN': 'When imagining the movement, what was your use of the VISUAL MODALITY of imagery (creating a visual image of the movement)? Only if you did not use visual imagery at all, select "0".', 'label_min_EN': 'No visual\nimagery use', 'label_middle_EN': '  ', 'label_max_EN': 'High visual\nimagery use', 'self_assess_question_ES': 'Al imaginar el movimiento, ¿cuál ha sido tu uso de la modalidad VISUAL (crear una imagen visual del moviemiento)? Solo si no has usado NADA la modalidad visual, selecciona 0.', 'label_min_ES': 'Ningún uso de la\nmodalidad visual', 'label_middle_ES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
      Routine self_assess
    LoopTerminator self_assess_loop
  LoopTerminator blocks_loop
  Routine bye
